PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['badlands_1.jpg', 'badlands_3.jpg', 'badlands_21.jpg', 'badlands_23.jpg', 'badlands_24.jpg', 'badlands_34.jpg', 'badlands_52.jpg', 'badlands_53.jpg', 'badlands_62.jpg', 'badlands_63.jpg', 'badlands_70.jpg', 'badlands_94.jpg', 'badlands_98.jpg', 'badlands_101.jpg', 'badlands_102.jpg', 'badlands_103.jpg', 'badlands_113.jpg', 'badlands_114.jpg', 'badlands_115.jpg', 'badlands_119.jpg', 'badlands_137.jpg', 'badlands_139.jpg', 'badlands_184.jpg', 'badlands_194.jpg', 'badlands_203.jpg', 'badlands_207.jpg', 'badlands_221.jpg', 'badlands_222.jpg', 'badlands_225.jpg', 'badlands_228.jpg', 'bridge_17.jpg', 'bridge_27.jpg', 'bridge_31.jpg', 'bridge_38.jpg', 'bridge_54.jpg', 'bridge_60.jpg', 'bridge_61.jpg', 'bridge_65.jpg', 'bridge_75.jpg', 'bridge_82.jpg', 'bridge_91.jpg', 'bridge_108.jpg', 'bridge_116.jpg', 'bridge_121.jpg', 'bridge_128.jpg', 'bridge_134.jpg', 'bridge_146.jpg', 'bridge_148.jpg', 'bridge_163.jpg', 'bridge_172.jpg', 'bridge_181.jpg', 'bridge_184.jpg', 'bridge_191.jpg', 'bridge_202.jpg', 'bridge_205.jpg', 'bridge_211.jpg', 'bridge_244.jpg', 'bridge_250.jpg', 'bridge_253.jpg', 'bridge_256.jpg', 'demo_encoding.xlsx', 'demo_test.xlsx', 'experiment_csv.csv', 'flower1_pair.jpg', 'flower1.jpg', 'flower2_pair.jpg', 'flower2.jpg', 'flower3_pair.jpg', 'flower3.jpg', 'flower4_pair.jpg', 'flower4.jpg', 'flower5_pair.jpg', 'flower5.jpg', 'flower6_pair.jpg', 'flower6.jpg', 'golf_course_2.jpg', 'golf_course_15.jpg', 'golf_course_16.jpg', 'golf_course_25.jpg', 'golf_course_26.jpg', 'golf_course_35.jpg', 'golf_course_78.jpg', 'golf_course_87.jpg', 'golf_course_97.jpg', 'golf_course_101.jpg', 'golf_course_113.jpg', 'golf_course_114.jpg', 'golf_course_123.jpg', 'golf_course_130.jpg', 'golf_course_134.jpg', 'golf_course_157.jpg', 'golf_course_160.jpg', 'golf_course_161.jpg', 'golf_course_188.jpg', 'golf_course_193.jpg', 'golf_course_195.jpg', 'golf_course_209.jpg', 'golf_course_214.jpg', 'golf_course_217.jpg', 'golf_course_235.jpg', 'golf_course_262.jpg', 'golf_course_309.jpg', 'golf_course_312.jpg', 'golf_course_317.jpg', 'golf_course_331.jpg', 'highway_60.jpg', 'highway_85.jpg', 'highway_87.jpg', 'highway_93.jpg', 'highway_122.jpg', 'highway_134.jpg', 'highway_156.jpg', 'highway_160.jpg', 'highway_171.jpg', 'highway_174.jpg', 'highway_177.jpg', 'highway_203.jpg', 'highway_204.jpg', 'highway_206.jpg', 'highway_209.jpg', 'highway_245.jpg', 'highway_273.jpg', 'highway_278.jpg', 'highway_293.jpg', 'highway_294.jpg', 'highway_314.jpg', 'highway_359.jpg', 'highway_368.jpg', 'highway_369.jpg', 'highway_379.jpg', 'highway_384.jpg', 'highway_389.jpg', 'highway_394.jpg', 'highway_406.jpg', 'highway_415.jpg', 'left.jpg', 'mountain_3.jpg', 'mountain_47.jpg', 'mountain_54.jpg', 'mountain_57.jpg', 'mountain_72.jpg', 'mountain_93.jpg', 'mountain_94.jpg', 'mountain_95.jpg', 'mountain_97.jpg', 'mountain_101.jpg', 'mountain_110.jpg', 'mountain_123.jpg', 'mountain_128.jpg', 'mountain_131.jpg', 'mountain_138.jpg', 'mountain_154.jpg', 'mountain_156.jpg', 'mountain_157.jpg', 'mountain_171.jpg', 'mountain_184.jpg', 'mountain_189.jpg', 'mountain_193.jpg', 'mountain_221.jpg', 'mountain_222.jpg', 'mountain_223.jpg', 'mountain_230.jpg', 'mountain_232.jpg', 'mountain_244.jpg', 'mountain_293.jpg', 'mountain_295.jpg', 'noise_1.png', 'noise_2.png', 'noise_3.png', 'noise_4.png', 'noise_5.png', 'noise_6.png', 'noise_7.png', 'noise_8.png', 'noise_9.png', 'noise_10.png', 'noise_11.png', 'noise_12.png', 'noise_13.png', 'noise_14.png', 'noise_15.png', 'noise_16.png', 'noise_17.png', 'noise_18.png', 'noise_19.png', 'noise_20.png', 'noise_21.png', 'noise_22.png', 'noise_23.png', 'noise_24.png', 'noise_25.png', 'noise_26.png', 'noise_27.png', 'noise_28.png', 'noise_29.png', 'noise_30.png', 'noise_31.png', 'noise_32.png', 'noise_33.png', 'noise_34.png', 'noise_35.png', 'noise_36.png', 'noise_37.png', 'noise_38.png', 'noise_39.png', 'noise_40.png', 'noise_41.png', 'noise_42.png', 'noise_43.png', 'noise_44.png', 'noise_45.png', 'noise_46.png', 'noise_47.png', 'noise_48.png', 'noise_49.png', 'noise_50.png', 'noise_51.png', 'noise_52.png', 'noise_53.png', 'noise_54.png', 'noise_55.png', 'noise_56.png', 'noise_57.png', 'noise_58.png', 'noise_59.png', 'noise_60.png', 'playground_2.jpg', 'playground_10.jpg', 'playground_12.jpg', 'playground_21.jpg', 'playground_22.jpg', 'playground_40.jpg', 'playground_43.jpg', 'playground_60.jpg', 'playground_65.jpg', 'playground_72.jpg', 'playground_76.jpg', 'playground_117.jpg', 'playground_122.jpg', 'playground_127.jpg', 'playground_131.jpg', 'playground_137.jpg', 'playground_144.jpg', 'playground_145.jpg', 'playground_164.jpg', 'playground_167.jpg', 'playground_205.jpg', 'playground_214.jpg', 'playground_215.jpg', 'playground_219.jpg', 'playground_229.jpg', 'playground_240.jpg', 'playground_242.jpg', 'playground_244.jpg', 'playground_257.jpg', 'playground_268.jpg', 'demo_encoding.xlsx', 'demo_test.xlsx', 'flower1_pair.jpg', 'flower1.jpg', 'flower2_pair.jpg', 'flower2.jpg', 'flower3_pair.jpg', 'flower3.jpg', 'flower4_pair.jpg', 'flower4.jpg', 'flower5_pair.jpg', 'flower5.jpg', 'flower6_pair.jpg', 'flower6.jpg', 'left.jpg', 'right.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = working
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Routines
  Routine consent_form
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_consent_form
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = hello
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  Routine instructions_1
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This experiment has two parts:

        part 1:
        A image will appear, and after you will choose the image you have previously seen.

        part 2:
        Rate the similarity between pairs of images

        we will begin with a short demo.

        press the space bar to begin.
  Routine instructions_before_exp
    KeyboardComponent key_resp_after_demo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_after_demo_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        now the experiemnt will begin

        press the spacebar to begin.
  Routine exp_trials
    ImageComponent exp_target_image
      image [set every repeat] = $target
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.05
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    ImageComponent exp_mask
      image [set every repeat] = $noise_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.55
      stopVal [duration (s)] = 1
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    ImageComponent exp_right_image
      image [set every repeat] = $image1
      pos = (0.3,0)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.55
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    ImageComponent exp_left_image
      image [set every repeat] = $image2
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.55
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.55
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  Routine demo_trials
    ImageComponent demo_target
      image [set every repeat] = $demo_target_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent image
      image [set every repeat] = $noise_pattern
      size = (0.5, 0.5)
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.15
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    ImageComponent demo_right_image
      image [set every repeat] = $demo_test_image_right
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
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    ImageComponent demo_left_image
      image [set every repeat] = $demo_test_image_left
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
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    KeyboardComponent key_resp_demo
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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    TextComponent choose_the_image_you_saw
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.3
      text = choose the image you have previously seen
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Flow
  Routine consent_form
  Routine instructions_1
  LoopInitiator demo_loop loopType="TrialHandler"
    conditionsFile = demo_encoding.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'demo_target_image': 'flower1.jpg', 'demo_test_image_left': 'flower1.jpg', 'demo_test_image_right': 'flower1_pair.jpg', 'demo_test_correct': 'left', 'noise_pattern': 'noise_1.png'},
      {'demo_target_image': 'flower2.jpg', 'demo_test_image_left': 'flower2_pair.jpg', 'demo_test_image_right': 'flower2.jpg', 'demo_test_correct': 'right', 'noise_pattern': 'noise_2.png'},
      {'demo_target_image': 'flower3.jpg', 'demo_test_image_left': 'flower3.jpg', 'demo_test_image_right': 'flower3_pair.jpg', 'demo_test_correct': 'left', 'noise_pattern': 'noise_3.png'},
      {'demo_target_image': 'flower4.jpg', 'demo_test_image_left': 'flower4.jpg', 'demo_test_image_right': 'flower4_pair.jpg', 'demo_test_correct': 'left', 'noise_pattern': 'noise_4.png'},
      {'demo_target_image': 'flower5.jpg', 'demo_test_image_left': 'flower5_pair.jpg', 'demo_test_image_right': 'flower5.jpg', 'demo_test_correct': 'right', 'noise_pattern': 'noise_5.png'},
      {'demo_target_image': 'flower6.jpg', 'demo_test_image_left': 'flower6.jpg', 'demo_test_image_right': 'flower6_pair.jpg', 'demo_test_correct': 'left', 'noise_pattern': 'noise_6.png'}]
    Routine demo_trials
  LoopTerminator demo_loop
  Routine instructions_before_exp
  LoopInitiator exp_loops loopType="TrialHandler"
    conditionsFile = experiment_csv.csv
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('target', 'badlands_222.jpg'), ('image1', 'badlands_62.jpg'), ('image2', 'badlands_222.jpg'), ('layer', 1), ('category', 'badlands'), ('correct', 'right'), ('noise_image', 'noise_0.png')]),
      OrderedDict([('target', 'playground_219.jpg'), ('image1', 'playground_205.jpg'), ('image2', 'playground_219.jpg'), ('layer', 1), ('category', 'playground'), ('correct', 'right'), ('noise_image', 'noise_1.png')]),
      OrderedDict([('target', 'golf_course_214.jpg'), ('image1', 'golf_course_312.jpg'), ('image2', 'golf_course_214.jpg'), ('layer', 0), ('category', 'golf'), ('correct', 'right'), ('noise_image', 'noise_2.png')]),
      OrderedDict([('target', 'bridge_91.jpg'), ('image1', 'bridge_253.jpg'), ('image2', 'bridge_91.jpg'), ('layer', 0), ('category', 'bridge'), ('correct', 'right'), ('noise_image', 'noise_3.png')]),
      OrderedDict([('target', 'bridge_108.jpg'), ('image1', 'bridge_108.jpg'), ('image2', 'bridge_116.jpg'), ('layer', 0), ('category', 'bridge'), ('correct', 'left'), ('noise_image', 'noise_4.png')]),
      OrderedDict([('target', 'mountain_293.jpg'), ('image1', 'mountain_47.jpg'), ('image2', 'mountain_293.jpg'), ('layer', 1), ('category', 'mountain'), ('correct', 'right'), ('noise_image', 'noise_5.png')]),
      OrderedDict([('target', 'playground_144.jpg'), ('image1', 'playground_144.jpg'), ('image2', 'playground_65.jpg'), ('layer', 1), ('category', 'playground'), ('correct', 'left'), ('noise_image', 'noise_6.png')])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
    Routine exp_trials
  LoopTerminator exp_loops
