PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['ID'], expName, expInfo['date'])
  Experiment info = {'ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['badlands_1.jpg', 'badlands_3.jpg', 'badlands_6.jpg', 'badlands_9.jpg', 'badlands_10.jpg', 'badlands_16.jpg', 'badlands_20.jpg', 'badlands_21.jpg', 'badlands_23.jpg', 'badlands_24.jpg', 'badlands_26.jpg', 'badlands_27.jpg', 'badlands_30.jpg', 'badlands_33.jpg', 'badlands_34.jpg', 'badlands_35.jpg', 'badlands_36.jpg', 'badlands_44.jpg', 'badlands_46.jpg', 'badlands_47.jpg', 'badlands_52.jpg', 'badlands_53.jpg', 'badlands_54.jpg', 'badlands_55.jpg', 'badlands_59.jpg', 'badlands_60.jpg', 'badlands_62.jpg', 'badlands_63.jpg', 'badlands_67.jpg', 'badlands_70.jpg', 'badlands_72.jpg', 'badlands_79.jpg', 'badlands_80.jpg', 'badlands_81.jpg', 'badlands_85.jpg', 'badlands_88.jpg', 'badlands_94.jpg', 'badlands_97.jpg', 'badlands_98.jpg', 'badlands_101.jpg', 'badlands_102.jpg', 'badlands_103.jpg', 'badlands_104.jpg', 'badlands_105.jpg', 'badlands_106.jpg', 'badlands_113.jpg', 'badlands_114.jpg', 'badlands_115.jpg', 'badlands_119.jpg', 'badlands_120.jpg', 'badlands_121.jpg', 'badlands_122.jpg', 'badlands_125.jpg', 'badlands_128.jpg', 'badlands_129.jpg', 'badlands_137.jpg', 'badlands_138.jpg', 'badlands_139.jpg', 'badlands_150.jpg', 'badlands_152.jpg', 'badlands_156.jpg', 'badlands_157.jpg', 'badlands_164.jpg', 'badlands_166.jpg', 'badlands_170.jpg', 'badlands_171.jpg', 'badlands_173.jpg', 'badlands_174.jpg', 'badlands_175.jpg', 'badlands_180.jpg', 'badlands_183.jpg', 'badlands_184.jpg', 'badlands_185.jpg', 'badlands_194.jpg', 'badlands_200.jpg', 'badlands_201.jpg', 'badlands_203.jpg', 'badlands_207.jpg', 'badlands_211.jpg', 'badlands_213.jpg', 'badlands_214.jpg', 'badlands_215.jpg', 'badlands_216.jpg', 'badlands_217.jpg', 'badlands_219.jpg', 'badlands_221.jpg', 'badlands_222.jpg', 'badlands_225.jpg', 'badlands_227.jpg', 'badlands_228.jpg', 'bird1.jpg', 'bird2.jpg', 'bird3.jpg', 'bridge_1.jpg', 'bridge_4.jpg', 'bridge_17.jpg', 'bridge_20.jpg', 'bridge_22.jpg', 'bridge_24.jpg', 'bridge_27.jpg', 'bridge_31.jpg', 'bridge_35.jpg', 'bridge_38.jpg', 'bridge_39.jpg', 'bridge_45.jpg', 'bridge_52.jpg', 'bridge_54.jpg', 'bridge_60.jpg', 'bridge_61.jpg', 'bridge_62.jpg', 'bridge_63.jpg', 'bridge_64.jpg', 'bridge_65.jpg', 'bridge_66.jpg', 'bridge_68.jpg', 'bridge_72.jpg', 'bridge_74.jpg', 'bridge_75.jpg', 'bridge_76.jpg', 'bridge_79.jpg', 'bridge_82.jpg', 'bridge_86.jpg', 'bridge_87.jpg', 'bridge_91.jpg', 'bridge_96.jpg', 'bridge_102.jpg', 'bridge_106.jpg', 'bridge_108.jpg', 'bridge_110.jpg', 'bridge_112.jpg', 'bridge_116.jpg', 'bridge_117.jpg', 'bridge_118.jpg', 'bridge_120.jpg', 'bridge_121.jpg', 'bridge_124.jpg', 'bridge_126.jpg', 'bridge_128.jpg', 'bridge_133.jpg', 'bridge_134.jpg', 'bridge_136.jpg', 'bridge_140.jpg', 'bridge_142.jpg', 'bridge_143.jpg', 'bridge_144.jpg', 'bridge_146.jpg', 'bridge_147.jpg', 'bridge_148.jpg', 'bridge_152.jpg', 'bridge_155.jpg', 'bridge_156.jpg', 'bridge_158.jpg', 'bridge_163.jpg', 'bridge_164.jpg', 'bridge_167.jpg', 'bridge_169.jpg', 'bridge_172.jpg', 'bridge_173.jpg', 'bridge_179.jpg', 'bridge_180.jpg', 'bridge_181.jpg', 'bridge_184.jpg', 'bridge_190.jpg', 'bridge_191.jpg', 'bridge_193.jpg', 'bridge_197.jpg', 'bridge_202.jpg', 'bridge_204.jpg', 'bridge_205.jpg', 'bridge_211.jpg', 'bridge_212.jpg', 'bridge_218.jpg', 'bridge_224.jpg', 'bridge_225.jpg', 'bridge_228.jpg', 'bridge_234.jpg', 'bridge_238.jpg', 'bridge_244.jpg', 'bridge_250.jpg', 'bridge_253.jpg', 'bridge_254.jpg', 'bridge_256.jpg', 'bridge_266.jpg', 'demo_encoding.xlsx', 'fence1.jpg', 'fence2.jpg', 'fence3.jpg', 'fence4.jpg', 'flower1_pair.jpg', 'flower1.jpg', 'flower2.jpg', 'flower3.jpg', 'golf_course_0.jpg', 'golf_course_2.jpg', 'golf_course_3.jpg', 'golf_course_15.jpg', 'golf_course_16.jpg', 'golf_course_23.jpg', 'golf_course_25.jpg', 'golf_course_26.jpg', 'golf_course_33.jpg', 'golf_course_35.jpg', 'golf_course_41.jpg', 'golf_course_42.jpg', 'golf_course_55.jpg', 'golf_course_56.jpg', 'golf_course_59.jpg', 'golf_course_61.jpg', 'golf_course_67.jpg', 'golf_course_71.jpg', 'golf_course_72.jpg', 'golf_course_78.jpg', 'golf_course_87.jpg', 'golf_course_97.jpg', 'golf_course_101.jpg', 'golf_course_102.jpg', 'golf_course_105.jpg', 'golf_course_113.jpg', 'golf_course_114.jpg', 'golf_course_116.jpg', 'golf_course_120.jpg', 'golf_course_123.jpg', 'golf_course_127.jpg', 'golf_course_128.jpg', 'golf_course_130.jpg', 'golf_course_133.jpg', 'golf_course_134.jpg', 'golf_course_137.jpg', 'golf_course_138.jpg', 'golf_course_144.jpg', 'golf_course_157.jpg', 'golf_course_160.jpg', 'golf_course_161.jpg', 'golf_course_162.jpg', 'golf_course_164.jpg', 'golf_course_166.jpg', 'golf_course_171.jpg', 'golf_course_174.jpg', 'golf_course_176.jpg', 'golf_course_179.jpg', 'golf_course_181.jpg', 'golf_course_188.jpg', 'golf_course_193.jpg', 'golf_course_194.jpg', 'golf_course_195.jpg', 'golf_course_196.jpg', 'golf_course_199.jpg', 'golf_course_202.jpg', 'golf_course_209.jpg', 'golf_course_212.jpg', 'golf_course_214.jpg', 'golf_course_217.jpg', 'golf_course_218.jpg', 'golf_course_219.jpg', 'golf_course_221.jpg', 'golf_course_226.jpg', 'golf_course_235.jpg', 'golf_course_238.jpg', 'golf_course_241.jpg', 'golf_course_252.jpg', 'golf_course_253.jpg', 'golf_course_262.jpg', 'golf_course_265.jpg', 'golf_course_269.jpg', 'golf_course_282.jpg', 'golf_course_288.jpg', 'golf_course_291.jpg', 'golf_course_297.jpg', 'golf_course_300.jpg', 'golf_course_305.jpg', 'golf_course_307.jpg', 'golf_course_308.jpg', 'golf_course_309.jpg', 'golf_course_312.jpg', 'golf_course_313.jpg', 'golf_course_316.jpg', 'golf_course_317.jpg', 'golf_course_328.jpg', 'golf_course_331.jpg', 'golf_course_333.jpg', 'golf_course_338.jpg', 'golf_course_342.jpg', 'highway_3.jpg', 'highway_9.jpg', 'highway_15.jpg', 'highway_17.jpg', 'highway_18.jpg', 'highway_28.jpg', 'highway_29.jpg', 'highway_30.jpg', 'highway_31.jpg', 'highway_33.jpg', 'highway_36.jpg', 'highway_37.jpg', 'highway_42.jpg', 'highway_50.jpg', 'highway_53.jpg', 'highway_58.jpg', 'highway_60.jpg', 'highway_76.jpg', 'highway_78.jpg', 'highway_81.jpg', 'highway_83.jpg', 'highway_85.jpg', 'highway_87.jpg', 'highway_90.jpg', 'highway_93.jpg', 'highway_101.jpg', 'highway_102.jpg', 'highway_107.jpg', 'highway_122.jpg', 'highway_134.jpg', 'highway_138.jpg', 'highway_141.jpg', 'highway_147.jpg', 'highway_148.jpg', 'highway_154.jpg', 'highway_156.jpg', 'highway_160.jpg', 'highway_171.jpg', 'highway_172.jpg', 'highway_174.jpg', 'highway_177.jpg', 'highway_178.jpg', 'highway_191.jpg', 'highway_193.jpg', 'highway_199.jpg', 'highway_203.jpg', 'highway_204.jpg', 'highway_206.jpg', 'highway_209.jpg', 'highway_226.jpg', 'highway_245.jpg', 'highway_246.jpg', 'highway_247.jpg', 'highway_251.jpg', 'highway_257.jpg', 'highway_265.jpg', 'highway_268.jpg', 'highway_269.jpg', 'highway_273.jpg', 'highway_274.jpg', 'highway_278.jpg', 'highway_287.jpg', 'highway_288.jpg', 'highway_290.jpg', 'highway_293.jpg', 'highway_294.jpg', 'highway_295.jpg', 'highway_305.jpg', 'highway_308.jpg', 'highway_313.jpg', 'highway_314.jpg', 'highway_315.jpg', 'highway_319.jpg', 'highway_335.jpg', 'highway_342.jpg', 'highway_354.jpg', 'highway_359.jpg', 'highway_365.jpg', 'highway_368.jpg', 'highway_369.jpg', 'highway_379.jpg', 'highway_383.jpg', 'highway_384.jpg', 'highway_389.jpg', 'highway_394.jpg', 'highway_399.jpg', 'highway_404.jpg', 'highway_406.jpg', 'highway_413.jpg', 'highway_415.jpg', 'index.html', 'leaf1.jpg', 'leaf2.jpg', 'leaf3.jpg', 'leaf4.jpg', 'mountain_3.jpg', 'mountain_19.jpg', 'mountain_22.jpg', 'mountain_29.jpg', 'mountain_32.jpg', 'mountain_33.jpg', 'mountain_34.jpg', 'mountain_35.jpg', 'mountain_38.jpg', 'mountain_39.jpg', 'mountain_40.jpg', 'mountain_41.jpg', 'mountain_43.jpg', 'mountain_45.jpg', 'mountain_47.jpg', 'mountain_51.jpg', 'mountain_54.jpg', 'mountain_57.jpg', 'mountain_62.jpg', 'mountain_72.jpg', 'mountain_76.jpg', 'mountain_87.jpg', 'mountain_88.jpg', 'mountain_89.jpg', 'mountain_91.jpg', 'mountain_92.jpg', 'mountain_93.jpg', 'mountain_94.jpg', 'mountain_95.jpg', 'mountain_97.jpg', 'mountain_101.jpg', 'mountain_102.jpg', 'mountain_110.jpg', 'mountain_120.jpg', 'mountain_123.jpg', 'mountain_126.jpg', 'mountain_128.jpg', 'mountain_131.jpg', 'mountain_135.jpg', 'mountain_137.jpg', 'mountain_138.jpg', 'mountain_143.jpg', 'mountain_146.jpg', 'mountain_151.jpg', 'mountain_152.jpg', 'mountain_154.jpg', 'mountain_156.jpg', 'mountain_157.jpg', 'mountain_160.jpg', 'mountain_166.jpg', 'mountain_169.jpg', 'mountain_171.jpg', 'mountain_176.jpg', 'mountain_180.jpg', 'mountain_184.jpg', 'mountain_187.jpg', 'mountain_189.jpg', 'mountain_190.jpg', 'mountain_192.jpg', 'mountain_193.jpg', 'mountain_198.jpg', 'mountain_199.jpg', 'mountain_202.jpg', 'mountain_204.jpg', 'mountain_206.jpg', 'mountain_212.jpg', 'mountain_221.jpg', 'mountain_222.jpg', 'mountain_223.jpg', 'mountain_226.jpg', 'mountain_228.jpg', 'mountain_230.jpg', 'mountain_232.jpg', 'mountain_233.jpg', 'mountain_244.jpg', 'mountain_249.jpg', 'mountain_250.jpg', 'mountain_251.jpg', 'mountain_253.jpg', 'mountain_256.jpg', 'mountain_268.jpg', 'mountain_277.jpg', 'mountain_290.jpg', 'mountain_293.jpg', 'mountain_294.jpg', 'mountain_295.jpg', 'mountain_302.jpg', 'mountain_306.jpg', 'mountain_307.jpg', 'mountain_309.jpg', 'playground_2.jpg', 'playground_6.jpg', 'playground_7.jpg', 'playground_10.jpg', 'playground_12.jpg', 'playground_14.jpg', 'playground_15.jpg', 'playground_16.jpg', 'playground_21.jpg', 'playground_22.jpg', 'playground_26.jpg', 'playground_30.jpg', 'playground_33.jpg', 'playground_36.jpg', 'playground_37.jpg', 'playground_39.jpg', 'playground_40.jpg', 'playground_42.jpg', 'playground_43.jpg', 'playground_47.jpg', 'playground_49.jpg', 'playground_50.jpg', 'playground_54.jpg', 'playground_55.jpg', 'playground_60.jpg', 'playground_61.jpg', 'playground_63.jpg', 'playground_64.jpg', 'playground_65.jpg', 'playground_68.jpg', 'playground_72.jpg', 'playground_74.jpg', 'playground_76.jpg', 'playground_78.jpg', 'playground_83.jpg', 'playground_84.jpg', 'playground_85.jpg', 'playground_98.jpg', 'playground_103.jpg', 'playground_110.jpg', 'playground_117.jpg', 'playground_118.jpg', 'playground_120.jpg', 'playground_122.jpg', 'playground_124.jpg', 'playground_126.jpg', 'playground_127.jpg', 'playground_131.jpg', 'playground_132.jpg', 'playground_137.jpg', 'playground_140.jpg', 'playground_141.jpg', 'playground_144.jpg', 'playground_145.jpg', 'playground_153.jpg', 'playground_154.jpg', 'playground_162.jpg', 'playground_164.jpg', 'playground_165.jpg', 'playground_167.jpg', 'playground_173.jpg', 'playground_176.jpg', 'playground_181.jpg', 'playground_184.jpg', 'playground_191.jpg', 'playground_195.jpg', 'playground_196.jpg', 'playground_204.jpg', 'playground_205.jpg', 'playground_214.jpg', 'playground_215.jpg', 'playground_219.jpg', 'playground_222.jpg', 'playground_227.jpg', 'playground_229.jpg', 'playground_233.jpg', 'playground_235.jpg', 'playground_237.jpg', 'playground_240.jpg', 'playground_241.jpg', 'playground_242.jpg', 'playground_244.jpg', 'playground_246.jpg', 'playground_248.jpg', 'playground_249.jpg', 'playground_251.jpg', 'playground_256.jpg', 'playground_257.jpg', 'playground_258.jpg', 'playground_268.jpg', 'sub_0.csv', 'sub_1.csv', 'sub_2.csv', 'sub_3.csv', 'sub_4.csv', 'sub_5.csv', 'sub_6.csv', 'sub_7.csv', 'sub_8.csv', 'sub_9.csv', 'sub_10.csv', 'sub_11.csv', 'sub_12.csv', 'sub_13.csv', 'sub_14.csv', 'sub_15.csv', 'sub_16.csv', 'sub_17.csv', 'sub_18.csv', 'sub_19.csv', 'sub_20.csv', 'sub_21.csv', 'sub_22.csv', 'sub_23.csv', 'sub_24.csv', 'sub_25.csv', 'sub_26.csv', 'sub_27.csv', 'sub_28.csv', 'sub_29.csv', 'sub_30.csv', 'sub_31.csv', 'sub_32.csv', 'sub_33.csv', 'sub_34.csv', 'sub_35.csv', 'sub_36.csv', 'sub_37.csv', 'sub_38.csv', 'sub_39.csv', 'sub_40.csv', 'sub_41.csv', 'sub_42.csv', 'sub_43.csv', 'sub_44.csv', 'sub_45.csv', 'sub_46.csv', 'sub_47.csv', 'sub_48.csv', 'sub_49.csv', 'sub_50.csv', 'sub_51.csv', 'sub_52.csv', 'sub_53.csv', 'sub_54.csv', 'sub_55.csv', 'sub_56.csv', 'sub_57.csv', 'sub_58.csv', 'sub_59.csv', 'sub_60.csv', 'sub_61.csv', 'sub_62.csv', 'sub_63.csv', 'sub_64.csv', 'sub_65.csv', 'sub_66.csv', 'sub_67.csv', 'sub_68.csv', 'sub_69.csv', 'sub_70.csv', 'sub_71.csv', 'sub_72.csv', 'sub_73.csv', 'sub_74.csv', 'sub_75.csv', 'sub_76.csv', 'sub_77.csv', 'sub_78.csv', 'sub_79.csv', 'sub_80.csv', 'sub_81.csv', 'sub_82.csv', 'sub_83.csv', 'sub_84.csv', 'sub_85.csv', 'sub_86.csv', 'sub_87.csv', 'sub_88.csv', 'sub_89.csv', 'sub_90.csv', 'sub_91.csv', 'sub_92.csv', 'sub_93.csv', 'sub_94.csv', 'sub_95.csv', 'sub_96.csv', 'sub_97.csv', 'sub_98.csv', 'sub_99.csv', 'trail1.jpg', 'trail2.jpg', 'trail3.jpg', 'tree1.jpg', 'tree2.jpg', 'tree3.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = working_memory
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Routines
  Routine consent_form
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_consent_form
      letterHeight = 0.025
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
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      text:
        By pressing ‘i consent’ I hereby accept to participate in a visual memory experiment.
        I declare I understood the experiment includes the following parts: Experiment description and instructions, practice phase, study phase and test phase.

        The goal of this study is to examine memory encoding processes.

        Methods: The experiment will be presented on a computer screen. In the first part you will study a series of neutral images and later will be asked to recognize them. Duration: up to 10 minutes. Time to complete the experiment from approval: 24 hours
        Participants: Healthy population (Amazon Mechanical Turk workers)
        Number of subjects: 100
        Side effects or discomfort: none

        Benefit from the experiment: Participants are not expected to gain personal benefit from this experiment. Through this experiment the research team hopes to uncover how human remember visual stimuli.
        Possible risk factors: none

        Voluntary participation: participants are free to quit the experiment at any moment with no penalty, since participation is voluntary.

        Research team is located in Tel Aviv University, and the experimental protocol was approved by its ethics committee.

        By pressing the "I conesnt" button, I hereby declare that I read the above information and agree to participate in this experiment.
    ButtonComponent button
      bold = True
      fillColor = green
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.38)
      size = [0.16, 0.07]
      startVal [time (s)] = 0
      text = I consent
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  Routine instructions_1
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_first_slide
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This experiment contains two parts:

        Part 1:


        In this part you are asked to memorize a series of breifly presented images. In each trial, following the images presentation, you will be presented with two images, one of which was previously presented during that trial. Please select the image you have previosly seen using the corresponding arrow key (left\right).


        Part 2:


        You are asked to rate the similarity between pairs of images. Rate the extent of the similarity by selecting the relevant score on the similarity scale at the bottom of the screen using the mouse.


        We will begin with a short demo of part 1.


        press the space bar to begin.
  Routine instructions_before_exp
    KeyboardComponent key_resp_after_demo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_after_demo_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now Part 1 of the experiment will begin.

        Reminder:

        In this part you are asked to memorize a series of breifly presented images. In each trial, following the images presentation, you will be presented with two images, one of which was previously presented during that trial. Please select the image you have previosly seen using the corresponding arrow key (left\right).


        press the spacebar to begin.
  Routine exp_trials
    ImageComponent exp_target_image
      image [set every repeat] = $target
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.05
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    ImageComponent exp_mask
      image [set every repeat] = $noise_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.55
      stopVal [duration (s)] = 1
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    ImageComponent exp_right_image
      image [set every repeat] = $image1
      pos = (0.3,0)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.55
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    ImageComponent exp_left_image
      image [set every repeat] = $image2
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.55
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.55
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  Routine demo_trials
    ImageComponent demo_target
      image [set every repeat] = $demo_target_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent image
      image [set every repeat] = $noise_pattern
      size = (0.5, 0.5)
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.15
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    ImageComponent demo_right_image
      image [set every repeat] = $demo_test_image_right
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
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    ImageComponent demo_left_image
      image [set every repeat] = $demo_test_image_left
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
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    KeyboardComponent key_resp_demo
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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    TextComponent choose_the_image_you_saw
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.3
      text = choose the image you have previously seen
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  Routine encoding
    ImageComponent image_0
      image [set every repeat] = $background_0
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    ImageComponent image_1
      image [set every repeat] = $background_1
      size = (0.5, 0.5)
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.25
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    ImageComponent image_2
      image [set every repeat] = $background_2
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.25
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    ImageComponent image_3
      image [set every repeat] = $background_3
      size = (0.5, 0.5)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.25
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    ImageComponent image_4
      image [set every repeat] = $background_4
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.25
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    ImageComponent image_5
      image [set every repeat] = $background_5
      size = (0.5, 0.5)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.25
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    TextComponent blank_screen
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1
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    TextComponent fixation_encoding
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = +
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  Routine test
    ImageComponent image_left
      image [set every repeat] = $image1
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_right
      image [set every repeat] = $image2
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent test_key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = choose the image you have previously seen
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  Routine encoding_demo
    ImageComponent image_0_demo
      image [set every repeat] = $background_0
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_1_demo
      image [set every repeat] = $background_1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.2
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    ImageComponent image_2_demo
      image [set every repeat] = $background_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.2
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    ImageComponent image_3_demo
      image [set every repeat] = $background_3
      size = (0.5, 0.5)
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.2
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    ImageComponent image_4_demo
      image [set every repeat] = $background_4
      size = (0.5, 0.5)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.2
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    ImageComponent image_5_demo
      image [set every repeat] = $background_5
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.2
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    TextComponent blank_screen_demo
      letterHeight = 0.1
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 1.0
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    TextComponent fixation_demo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine test_demo
    ImageComponent image_left_demo
      image [set every repeat] = $image1
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_right_demo
      image [set every repeat] = $image2
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent demo_test_key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = choose the image you have previously seen
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  Routine instructions_after_part1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we will begin part 2.


        Reminder: You are asked to rate the similarity between pairs of images. Rate the extent of the similarity by selecting the relevant score on the similarity scale at the bottom of the screen using the mouse.


        Judge the similarity of these images on the scale of:

        1 - not similar
        9 - very similar

        Use the mouse to select the value on the scale.

        press the spacebar to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part2_exp
    ImageComponent image_left_part2
      image [set every repeat] = $image1
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_right_part2
      image [set every repeat] = $image2
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider_part2
      forceEndRoutine = True
      granularity = 0
      labels = ["1 \nnot similar", 2, 3, 4, 5, 6, 7, 8, "9 \nvery similar"]
      letterHeight = 0.03
      pos = (0, -0.32)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2,3,4,5,6,7,8,9)
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = how similar are the images?
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  Routine last_slide
    KeyboardComponent key_resp_last_slide
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_last_slide
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you!

        Your credit code is:


        ‘tchcugsi’


        Report it in the M-turk platform.


        Please press the space bar to finish
Flow
  Routine consent_form
  Routine instructions_1
  LoopInitiator demo_loops loopType="TrialHandler"
    conditionsFile = demo_encoding.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target': 'flower1.jpg', 'image1': 'flower1.jpg', 'image2': 'flower1_pair.jpg', 'correct': 'left', 'background_0': 'leaf3.jpg', 'background_1': 'trail1.jpg', 'background_2': 'flower1.jpg', 'background_3': 'bird1.jpg', 'background_4': 'tree3.jpg', 'background_5': 'fence4.jpg', 'target_index': 2},
      {'target': 'leaf2.jpg', 'image1': 'leaf1.jpg', 'image2': 'leaf2.jpg', 'correct': 'right', 'background_0': 'trail2.jpg', 'background_1': 'leaf2.jpg', 'background_2': 'bird2.jpg', 'background_3': 'tree2.jpg', 'background_4': 'fence3.jpg', 'background_5': 'flower2.jpg', 'target_index': 1},
      {'target': 'fence1.jpg', 'image1': 'fence1.jpg', 'image2': 'fence2.jpg', 'correct': 'left', 'background_0': 'tree1.jpg', 'background_1': 'bird3.jpg', 'background_2': 'trail3.jpg', 'background_3': 'fence1.jpg', 'background_4': 'leaf4.jpg', 'background_5': 'flower3.jpg', 'target_index': 3}]
    Routine encoding_demo
    Routine test_demo
  LoopTerminator demo_loops
  Routine instructions_before_exp
  LoopInitiator exp_loops loopType="TrialHandler"
    conditionsFile = sub_4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('target', 'badlands_113.jpg'), ('selected_dist', 'badlands_203.jpg'), ('distractor_level', 1), ('image1', 'badlands_203.jpg'), ('image2', 'badlands_113.jpg'), ('correct', 'right'), ('category', 'badlands'), ('background_0', 'golf_course_166.jpg'), ('background_1', 'badlands_113.jpg'), ('background_2', 'bridge_39.jpg'), ('background_3', 'highway_354.jpg'), ('background_4', 'mountain_226.jpg'), ('background_5', 'playground_84.jpg'), ('target_index', 1)]),
      OrderedDict([('target', 'badlands_222.jpg'), ('selected_dist', 'badlands_62.jpg'), ('distractor_level', 1), ('image1', 'badlands_222.jpg'), ('image2', 'badlands_62.jpg'), ('correct', 'left'), ('category', 'badlands'), ('background_0', 'golf_course_212.jpg'), ('background_1', 'mountain_206.jpg'), ('background_2', 'bridge_224.jpg'), ('background_3', 'badlands_222.jpg'), ('background_4', 'highway_28.jpg'), ('background_5', 'playground_181.jpg'), ('target_index', 3)]),
      OrderedDict([('target', 'highway_359.jpg'), ('selected_dist', 'highway_379.jpg'), ('distractor_level', 1), ('image1', 'highway_359.jpg'), ('image2', 'highway_379.jpg'), ('correct', 'left'), ('category', 'highway'), ('background_0', 'highway_359.jpg'), ('background_1', 'mountain_91.jpg'), ('background_2', 'golf_course_23.jpg'), ('background_3', 'badlands_166.jpg'), ('background_4', 'bridge_234.jpg'), ('background_5', 'playground_173.jpg'), ('target_index', 0)]),
      OrderedDict([('target', 'mountain_222.jpg'), ('selected_dist', 'mountain_244.jpg'), ('distractor_level', 0), ('image1', 'mountain_244.jpg'), ('image2', 'mountain_222.jpg'), ('correct', 'right'), ('category', 'mountain'), ('background_0', 'badlands_150.jpg'), ('background_1', 'bridge_158.jpg'), ('background_2', 'mountain_222.jpg'), ('background_3', 'golf_course_127.jpg'), ('background_4', 'highway_78.jpg'), ('background_5', 'playground_153.jpg'), ('target_index', 2)])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
    Routine encoding
    Routine test
  LoopTerminator exp_loops
  Routine instructions_after_part1
  LoopInitiator exp_loops_part2 loopType="TrialHandler"
    conditionsFile = sub_0.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('target', 'badlands_113.jpg'), ('selected_dist', 'badlands_225.jpg'), ('distractor_level', 0), ('image1', 'badlands_113.jpg'), ('image2', 'badlands_225.jpg'), ('correct', 'left'), ('category', 'badlands'), ('background_0', 'mountain_151.jpg'), ('background_1', 'highway_76.jpg'), ('background_2', 'badlands_113.jpg'), ('background_3', 'golf_course_221.jpg'), ('background_4', 'bridge_136.jpg'), ('background_5', 'playground_153.jpg'), ('target_index', 2)]),
      OrderedDict([('target', 'badlands_222.jpg'), ('selected_dist', 'badlands_34.jpg'), ('distractor_level', 0), ('image1', 'badlands_222.jpg'), ('image2', 'badlands_34.jpg'), ('correct', 'left'), ('category', 'badlands'), ('background_0', 'highway_247.jpg'), ('background_1', 'badlands_222.jpg'), ('background_2', 'mountain_43.jpg'), ('background_3', 'golf_course_333.jpg'), ('background_4', 'bridge_142.jpg'), ('background_5', 'playground_126.jpg'), ('target_index', 1)]),
      OrderedDict([('target', 'highway_359.jpg'), ('selected_dist', 'highway_379.jpg'), ('distractor_level', 1), ('image1', 'highway_359.jpg'), ('image2', 'highway_379.jpg'), ('correct', 'left'), ('category', 'highway'), ('background_0', 'mountain_268.jpg'), ('background_1', 'badlands_180.jpg'), ('background_2', 'bridge_96.jpg'), ('background_3', 'highway_359.jpg'), ('background_4', 'playground_191.jpg'), ('background_5', 'golf_course_67.jpg'), ('target_index', 3)]),
      OrderedDict([('target', 'mountain_222.jpg'), ('selected_dist', 'mountain_244.jpg'), ('distractor_level', 0), ('image1', 'mountain_244.jpg'), ('image2', 'mountain_222.jpg'), ('correct', 'right'), ('category', 'mountain'), ('background_0', 'mountain_222.jpg'), ('background_1', 'playground_181.jpg'), ('background_2', 'bridge_266.jpg'), ('background_3', 'golf_course_176.jpg'), ('background_4', 'badlands_156.jpg'), ('background_5', 'highway_268.jpg'), ('target_index', 0)])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
    Routine part2_exp
  LoopTerminator exp_loops_part2
  Routine last_slide
